<config>
  <!-- The starting directory. -->
  <directory type="directory">C:/Data/</directory>
  <!-- The setup name -->
  <setup_name type="string">MERFISH</setup_name>
  <!-- The ui type, this is "classic" or "detached" -->
  <ui_type type="string">classic</ui_type>
  <!-- This has two effects: (1) If this is True any exception will immediately crash HAL, which can be useful for debugging. If it is False then some exceptions will be handled by the modules.(2) If it is False we also dont check whether messages are valid. -->
  <strict type="boolean">True</strict>
  <!-- Define the modules to use for this setup. -->
  <modules>
    <hal>
      <module_name type="string">storm_control.hal4000.hal4000</module_name>
      <class_name type="string">HalController</class_name>
    </hal>
    <display>
      <module_name type="string">storm_control.hal4000.display.display</module_name>
      <class_name type="string">Display</class_name>
      <parameters>
        <colortable type="string" values="" desc="">idl5.ctbl</colortable>
      </parameters>
    </display>
    <feeds>
      <module_name type="string">storm_control.hal4000.feeds.feeds</module_name>
      <class_name type="string">Feeds</class_name>
    </feeds>
    <film>
      <module_name type="string">storm_control.hal4000.film.film</module_name>
      <class_name type="string">Film</class_name>
      <parameters>
        <extension type="string" values=",Red,Green,Blue" desc="Movie file name extension"></extension>
      </parameters>
    </film>
    <mosaic>
      <module_name type="string">storm_control.hal4000.mosaic.mosaic</module_name>
      <class_name type="string">Mosaic</class_name>
      <parameters>
        <flip_horizontal type="boolean" values="" desc="Flip image horizontal (mosaic)">False</flip_horizontal>
        <flip_vertical type="boolean" values="" desc="Flip image vertical (mosaic)">False</flip_vertical>
        <transpose type="boolean" values="" desc="Transpose image vertical (mosaic)">False</transpose>
        <objective type="string" values="obj1,obj2,obj3" desc="Current objective">obj1</objective>
        <obj1 type="custom" values="" desc="Objective 1">100x,0.06,0.0,0.0</obj1>
      </parameters>
    </mosaic>
    <settings>
      <module_name type="string">storm_control.hal4000.settings.settings</module_name>
      <class_name type="string">Settings</class_name>
    </settings>
    <timing>
      <module_name type="string">storm_control.hal4000.timing.timing</module_name>
      <class_name type="string">Timing</class_name>
      <parameters>
        <time_base type="string" values="" desc="">camera1</time_base>
      </parameters>
    </timing>
    <none_irlaser>
      <module_name type="string">storm_control.sc_hardware.none.noneIRLaserModule</module_name>
      <class_name type="string">NoneIRLaserModule</class_name>
    </none_irlaser>
    <camera1>
      <module_name type="string">storm_control.hal4000.camera.camera</module_name>
      <class_name type="string">Camera</class_name>
      <camera>
        <master type="boolean">True</master>
        <module_name type="string">storm_control.hal4000.camera.photometricsCameraControl</module_name>
        <class_name type="string">PhotometricsCameraControl</class_name>
        <parameters>
          <pvcam_sdk type="string">C:/Windows/System32/pvcam64.dll</pvcam_sdk>
          <camera_name type="string">PMPCIECam00</camera_name>
          <default_max type="int">150</default_max>
          <default_min type="int">100</default_min>
          <flip_horizontal type="boolean">False</flip_horizontal>
          <flip_vertical type="boolean">False</flip_vertical>
          <transpose type="boolean">False</transpose>
          <extension type="string"/>
          <saved type="boolean">True</saved>
        </parameters>
      </camera>
    </camera1>
    <daq>
      <module_name type="string">storm_control.sc_hardware.nationalInstruments.nidaqModule</module_name>
      <class_name type="string">NidaqModule</class_name>
      <configuration>
        <timing>
          <camera_fire_pin type="string">/Dev1/PFI8</camera_fire_pin>
          <counter type="string">/Dev1/ctr0</counter>
          <counter_out type="string">/Dev1/PFI12</counter_out>
        </timing>
        <ilm400>
          <ao_task>
            <source type="string">/Dev1/ao0</source>
          </ao_task>
          <do_task>
            <source type="string">/Dev1/port0/line0</source>
          </do_task>
        </ilm400>
        <ilm470>
          <ao_task>
            <source type="string">/Dev1/ao1</source>
          </ao_task>
          <do_task>
            <source type="string">/Dev1/port0/line1</source>
          </do_task>
        </ilm470>
        <ilm545>
          <ao_task>
            <source type="string">/Dev1/ao2</source>
          </ao_task>
          <do_task>
            <source type="string">/Dev1/port0/line8</source>
          </do_task>
        </ilm545>
        <ilm630>
          <ao_task>
            <source type="string">/Dev2/ao0</source>
          </ao_task>
          <do_task>
            <source type="string">/Dev2/port0/line0</source>
          </do_task>
        </ilm630>
        <ilm730>
          <ao_task>
            <source type="string">/Dev2/ao1</source>
          </ao_task>
          <do_task>
            <source type="string">/Dev2/port0/line1</source>
          </do_task>
        </ilm730>
        <mcl>
          <ao_task>
            <source type="string">/Dev1/ao3</source>
          </ao_task>
        </mcl>
      </configuration>
    </daq>
    <focuslock>
      <module_name type="string">storm_control.hal4000.focusLock.focusLock</module_name>
      <class_name type="string">FocusLock</class_name>
      <configuration>
        <ir_laser type="string">none_irlaser</ir_laser>
        <ir_power type="int">10</ir_power>
        <lock_modes type="string">NoLockMode,AutoLockMode,AlwaysOnLockMode,OptimalLockMode,CalibrationLockMode,HardwareZScanLockMode</lock_modes>
        <qpd type="string">none_qpd</qpd>
        <z_stage type="string">mcl_zstage</z_stage>
        <parameters>
          <find_sum>
            <step_size type="float">1.0</step_size>
          </find_sum>
          <locked>
            <buffer_length type="int">5</buffer_length>
            <offset_threshold type="float">50.0</offset_threshold>
          </locked>
          <scan>
            <scan_step type="float">1.0</scan_step>
            <offset_threshold type="float">10000.0</offset_threshold>
          </scan>
          <hardware_z_scan>
            <z_offsets>-6.000,-6.000,-6.000,-6.000,-6.000,-5.850,-5.850,-5.850,-5.850,-5.850,-5.700,-5.700,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6.000</z_offsets>
          </hardware_z_scan>
          <jump_size type="float">0.1</jump_size>
        </parameters>
      </configuration>
    </focuslock>
    <illumination>
      <module_name type="string">storm_control.hal4000.illumination.illumination</module_name>
      <class_name type="string">Illumination</class_name>
      <configuration>
        <ch1>
          <gui_name type="string">400</gui_name>
          <color type="string">0,0,139</color>
          <analog_modulation>
            <hw_fn_name type="string">daq.ilm400.ao_task</hw_fn_name>
            <max_voltage type="float">4.9</max_voltage>
            <min_voltage type="float">0.0</min_voltage>
          </analog_modulation>
          <digital_modulation>
            <hw_fn_name type="string">daq.ilm400.do_task</hw_fn_name>
          </digital_modulation>
        </ch1>
        <ch2>
          <gui_name type="string">470</gui_name>
          <color type="string">0,0,255</color>
          <analog_modulation>
            <hw_fn_name type="string">daq.ilm470.ao_task</hw_fn_name>
            <max_voltage type="float">4.9</max_voltage>
            <min_voltage type="float">0.0</min_voltage>
          </analog_modulation>
          <digital_modulation>
            <hw_fn_name type="string">daq.ilm470.do_task</hw_fn_name>
          </digital_modulation>
        </ch2>
        <ch3>
          <gui_name type="string">545</gui_name>
          <color type="string">127,255,0</color>
          <analog_modulation>
            <hw_fn_name type="string">daq.ilm545.ao_task</hw_fn_name>
            <max_voltage type="float">4.9</max_voltage>
            <min_voltage type="float">0.0</min_voltage>
          </analog_modulation>
          <digital_modulation>
            <hw_fn_name type="string">daq.ilm545.do_task</hw_fn_name>
          </digital_modulation>
        </ch3>
        <ch4>
          <gui_name type="string">630</gui_name>
          <color type="string">255,48,48</color>
          <analog_modulation>
            <hw_fn_name type="string">daq.ilm630.ao_task</hw_fn_name>
            <max_voltage type="float">4.9</max_voltage>
            <min_voltage type="float">0.0</min_voltage>
          </analog_modulation>
          <digital_modulation>
            <hw_fn_name type="string">daq.ilm630.do_task</hw_fn_name>
          </digital_modulation>
        </ch4>
        <ch5>
          <gui_name type="string">730</gui_name>
          <color type="string">139,26,26</color>
          <analog_modulation>
            <hw_fn_name type="string">daq.ilm730.ao_task</hw_fn_name>
            <max_voltage type="float">4.9</max_voltage>
            <min_voltage type="float">0.0</min_voltage>
          </analog_modulation>
          <digital_modulation>
            <hw_fn_name type="string">daq.ilm730.do_task</hw_fn_name>
          </digital_modulation>
        </ch5>
      </configuration>
    </illumination>
    <none_qpd>
      <module_name type="string">storm_control.sc_hardware.none.noneQPDModule</module_name>
      <class_name type="string">NoneQPDModule</class_name>
      <configuration>
        <parameters>
          <max_voltage type="float">10.0</max_voltage>
          <min_voltage type="float">-10.0</min_voltage>
          <offset_has_center_bar type="boolean">True</offset_has_center_bar>
          <offset_maximum type="float">0.6</offset_maximum>
          <offset_minimum type="float">-0.6</offset_minimum>
          <offset_warning_high type="float">0.5</offset_warning_high>
          <offset_warning_low type="float">-0.5</offset_warning_low>
          <sum_maximum type="float">1000.0</sum_maximum>
          <sum_minimum type="float">0.0</sum_minimum>
          <sum_warning_low type="float">100.0</sum_warning_low>
        </parameters>
        <units_to_microns type="float">1.0</units_to_microns>
        <noise type="float">0e-2</noise>
        <tilt type="float">0e-3</tilt>
        <z_stage_fn type="string">mcl_zstage</z_stage_fn>
      </configuration>
    </none_qpd>
    <uc480_camera>
      <module_name type="string">storm_control.sc_hardware.thorlabs.uc480CameraModule</module_name>
      <class_name type="string">UC480Camera</class_name>
      <configuration>
        <parameters>
          <offset_has_center_bar type="boolean">True</offset_has_center_bar>
          <offset_maximum type="float">100.0</offset_maximum>
          <offset_minimum type="float">-100.0</offset_minimum>
          <offset_warning_high type="float">80.0</offset_warning_high>
          <offset_warning_low type="float">-80.0</offset_warning_low>
          <sum_maximum type="float">230000.0</sum_maximum>
          <sum_minimum type="float">50.0</sum_minimum>
          <sum_warning_low type="float">125000.0</sum_warning_low>
        </parameters>
        <units_to_microns type="float">0.025</units_to_microns>
        <background type="int">100000</background>
        <camera_id type="int">1</camera_id>
        <ini_file type="string">uc480_settings.ini</ini_file>
        <offset_file type="string">C:/Users/MERFISH/Documents/GitHub/storm-control/storm_control/hal4000/cam_offsets_storm5.txt</offset_file>
        <sigma type="float">2.0</sigma>
        <uc480_dll type="string">c:/windows/system32/uc480_64.dll</uc480_dll>
        <use_correlation type="boolean">True</use_correlation>
        <allow_single_fits type="boolean">False</allow_single_fits>
        <x_width type="int">700</x_width>
        <y_width type="int">100</y_width>
      </configuration>
    </uc480_camera>
    <none_stage>
      <module_name type="string">storm_control.sc_hardware.none.noneStageModule</module_name>
      <class_name type="string">NoneStageModule</class_name>

      <configuration>
	<velocity type="float">100.0</velocity>
      </configuration>
    </none_stage>
    <!--<pi_stage>
      <module_name type="string">storm_control.sc_hardware.physikInstrumente.piC867Module2</module_name>
      <class_name type="string">PiStageModule</class_name>
      <configuration>
        <serialnum1 type="int">0109029920</serialnum1>
        <serialnum2 type="int">0109029922</serialnum2>
        <devices>
          <xy_stage>
            <velocity type="float">400.0</velocity>
          </xy_stage>
        </devices>
      </configuration>
    </pi_stage>-->
    <mcl_zstage>
      <module_name type="string">storm_control.sc_hardware.ludl.ludlVoltageZModule</module_name>
      <class_name type="string">LudlVoltageZ</class_name>
      <configuration>
        <parameters>
          <center type="float">150.0</center>
          <has_center_bar type="boolean">True</has_center_bar>
          <maximum type="float">300.0</maximum>
          <minimum type="float">0.0</minimum>
          <warning_high type="float">280.0</warning_high>
          <warning_low type="float">20.0</warning_low>
        </parameters>
        <ao_fn_name type="string">daq.mcl.ao_task</ao_fn_name>
        <microns_to_volts type="float">0.0333333</microns_to_volts>
        <invert_signal type="boolean">False</invert_signal>
      </configuration>
    </mcl_zstage>
    <progressions>
      <module_name type="string">storm_control.hal4000.progressions.progressions</module_name>
      <class_name type="string">Progressions</class_name>
      <configuration>
        <illumination_functionality type="string">illumination</illumination_functionality>
        <frames type="int">100</frames>
        <increment type="float">0.01</increment>
        <starting_value type="float">0.1</starting_value>
      </configuration>
    </progressions>
    <spotcounter>
      <module_name type="string">storm_control.hal4000.spotCounter.spotCounter</module_name>
      <class_name type="string">SpotCounter</class_name>
      <configuration>
        <max_threads type="int">4</max_threads>
        <max_size type="int">263000</max_size>
      </configuration>
    </spotcounter>
    <stage>
      <module_name type="string">storm_control.hal4000.stage.stage</module_name>
      <class_name type="string">Stage</class_name>
      <configuration>
        <stage_functionality type="string">none_stage</stage_functionality>
      </configuration>
    </stage>
    <tcp_control>
      <module_name type="string">storm_control.hal4000.tcpControl.tcpControl</module_name>
      <class_name type="string">TCPControl</class_name>
      <configuration>
        <parallel_mode type="boolean">True</parallel_mode>
        <tcp_port type="int">9000</tcp_port>
      </configuration>
    </tcp_control>
  </modules>
</config>
