<?xml version="1.0" encoding="ISO-8859-1"?>
<config>

  <!-- The starting directory. -->
  <directory type="directory">C:/Data/</directory>

  <!-- The setup name -->
  <setup_name type="string">none</setup_name>

  <!-- The ui type, this is 'classic' or 'detached' -->
  <ui_type type="string">classic</ui_type>

  <!--
      This has two effects:
      
      (1) If this is True any exception will immediately crash HAL, which can
      be useful for debugging. If it is False then some exceptions will be
      handled by the modules.
      
      (2) If it is False we also don't check whether messages are valid.
  -->
  <strict type="boolean">True</strict>
  
  <!--
      Define the modules to use for this setup.
  -->
  <modules>

    <!--
	This is the main window, you must have this.
    -->
    <hal>
      <module_name type="string">storm_control.hal4000.hal4000</module_name>
      <class_name type="string">HalController</class_name>
    </hal>

    <!--
	You also need all of these.
    -->

    <!-- Camera display. -->
    <display>
      <class_name type="string">Display</class_name>
      <module_name type="string">storm_control.hal4000.display.display</module_name>
      <parameters>

	<!-- The default color table. Other options are in hal4000/colorTables/all_tables -->
	<colortable type="string">idl5.ctbl</colortable>
	
      </parameters>
    </display>
    
    <!-- Feeds. -->
    <feeds>
      <class_name type="string">Feeds</class_name>
      <module_name type="string">storm_control.hal4000.feeds.feeds</module_name>
    </feeds>

    <!-- Filming and starting/stopping the camera. -->
    <film>
      <class_name type="string">Film</class_name>
      <module_name type="string">storm_control.hal4000.film.film</module_name>

      <!-- Film parameters specific to this setup go here. -->
      <parameters>
	<extension desc="Movie file name extension" type="string" values=",Red,Green,Blue"></extension>
      </parameters>
    </film>

    <!-- Loading, changing and editting settings/parameters -->
    <settings>
      <class_name type="string">Settings</class_name>
      <module_name type="string">storm_control.hal4000.settings.settings</module_name>
    </settings>

    <!-- Set the time base for films. -->
    <timing>
      <class_name type="string">Timing</class_name>
      <module_name type="string">storm_control.hal4000.timing.timing</module_name>
      <parameters>
	<time_base type="string">camera1</time_base>
      </parameters>
    </timing>



    <!--
	Everything else is optional, but you probably want at least one camera.
    -->

    <!-- Camera control. -->
    <!--
	Note that the cameras must have the names "camera1", "camera2", etc..
	
	Cameras are either "master" (they provide their own hardware timing)
	or "slave" they are timed by another camera. Each time the cameras
	are started the slave cameras are started first, then the master cameras.
    -->

    <camera1>
      <class_name type="string">Camera</class_name>
      <module_name type="string">storm_control.hal4000.camera.camera</module_name>
      <camera>
	<master type="boolean">False</master>
	<class_name type="string">PhotometricsCameraControl</class_name>
	<module_name type="string">storm_control.hal4000.camera.photometricsCameraControl</module_name>
	<parameters>
	  
	  <!-- The PVCAM SDK. -->
	  <pvcam_sdk type="string">C:/Windows/System32/pvcam64.dll</pvcam_sdk>

	  <!-- The camera name. -->
	  <camera_name type="string">PMPCIECam00</camera_name>

	  <!-- These are the display defaults, not the camera range. -->
	  <default_max type="int">2000</default_max> 
	  <default_min type="int">100</default_min>
	  <flip_horizontal type="boolean">False</flip_horizontal>
	  <flip_vertical type="boolean">False</flip_vertical>
	  <transpose type="boolean">False</transpose>

	  <!-- These can be changed / editted. -->

	  <!-- This is the extension to use (if any) when saving data from this camera. -->
	  <extension type="string"></extension>
	  
	  <!-- Whether or not data from this camera is saved during filming. -->
	  <saved type="boolean">True</saved>

	</parameters>
      </camera>
    </camera1>



    <!-- TCP control -->
    <tcp_control>
      <module_name type="string">storm_control.hal4000.tcpControl.tcpControl</module_name>
      <class_name type="string">TCPControl</class_name>	    
      <configuration>
	<parallel_mode type="boolean">True</parallel_mode>
	<tcp_port type="int">9000</tcp_port>
      </configuration>
    </tcp_control>
    
  </modules>
  
</config>
